objref outFile,st, st2, st3, st4
depth = 2
celsius = 25
usetable_na=0
usetable_km=0
usetable_kv=0
usetable_ca=0
usetable_kca=0
usetable_cad=0
secondorder=0
proc createSimpleCompt(){
	nseg = 29
	cm=1
	insert kv
	insert na
    insert cad
	insert km
	insert ca
	insert kca
	
	//taur_cad = 1000000000000000000000000000000000
	gbar_na(0:1) =1:10000
	gbar_kv = 1000
	gbar_km = 1000
	gbar_ca = 1000
	gbar_kca =1000
	diam = 0.5
	L=1
finitialize(-65)
}

/*begintemplate String
	public s
	strdef s
endtemplate String
objref s[10]*/



numOfNodes = 2^depth-1
create dends[numOfNodes]
proc buildBTree(){
	fatherInd = $1
	currInd=$2
	currDepth =$3
	access dends[$2]
	createSimpleCompt()
	//nseg=currInd+1
	
	if($2>0){
		connect dends[$2](0), dends[$1](1)
	}
	printf("f is %d c is %d d is %d\n",$1,$2,$3)
	if($3 < depth){
	printf("currDepth is %d depth is %d\n",$3,depth)
		buildBTree($2,$2*2+1,$3+1)
		buildBTree($2,$2*2+2,$3+1)
	}	
}
buildBTree(0,0,1)
access dends[0]
st = new IClamp(.5)
st.del =0.1
st.dur =0.5
st.amp = 0.12
nseg=2
//diam = diam*0.001



tfinal = 1.5
dt =0.01

//ADD STUFF HERE
// Start topology output
hoc_stdout("/home/john/Projects/neurogpu2/Neuron/printCell/Amit/output/64T.csv")
topology()
forall{
	printf("%s\n",secname())
	printf("%f,%f,%f,%f,%f,%f,%f,%f,%f,%f,%f,%.16f,%f,%f\n",nseg,L,diam,Ra,cm,dt,st.del,st.dur,st.amp,tfinal,v(0.5),area(0.5),parent_connection(),n3d())
}
hoc_stdout()
// End topology output
// Start mechanisms output
objref mt,ms,fn,pp
strdef s,ss,mname
mt = new MechanismType(0)
fn = new File()
fn.wopen("/home/john/Projects/neurogpu2/Neuron/printCell/Amit/output/64MDL.csv")
forall{
	fn.printf("#%s\n",secname())
	for i=0, mt.count()-1 {
		mt.select(i)
		mt.selected(mname)
		if (ismembrane(mname)){
			ms = new MechanismStandard(mname,-1)
			for j=0, ms.count()-1 {
				k = ms.name(s, j)
				sprint(ss,"temp=%s",s)
				execute(ss)
				fn.printf("%s = %f\n",s,temp)
			}
		}
	}
}
fn.close()
// End mechanisms output
// Start point processess mechanisms output
fn = new File()
fn.wopen("/home/john/Projects/neurogpu2/Neuron/printCell/Amit/output/64PP.csv")
forall{
	fn.printf("#%s\n",secname())
	mt = new MechanismType(1)
	mt.select("IClamp")
	for (pp = mt.pp_begin(); object_id(pp) != 0; pp = mt.pp_next()) {
		x = pp.get_loc()
		del1 = pp.del
		dur1 = pp.dur
		amp1 = pp.amp
		fn.printf("IClamp,%g, %g, %g, %g, ", x, del1, dur1, amp1)
		pop_section()
	}
	fn.printf("\n")
}
fn.close()
// End point processess mechanisms output
// Start params output
fn.wopen("/home/john/Projects/neurogpu2/Neuron/printCell/Amit/output/ParamM.dat")
access dends[0]
a=eca
fn.vwrite(&a)
access dends[0]
a=ek
fn.vwrite(&a)
access dends[0]
a=ena
fn.vwrite(&a)
a=celsius
fn.vwrite(&a)
a=stoprun
fn.vwrite(&a)
a=clamp_resist
fn.vwrite(&a)
a=secondorder
fn.vwrite(&a)
a=q10_ca
fn.vwrite(&a)
a=temp_ca
fn.vwrite(&a)
a=tadj_ca
fn.vwrite(&a)
a=vmin_ca
fn.vwrite(&a)
a=vmax_ca
fn.vwrite(&a)
a=vshift_ca
fn.vwrite(&a)
a=depth_cad
fn.vwrite(&a)
a=cainf_cad
fn.vwrite(&a)
a=taur_cad
fn.vwrite(&a)
a=q10_kca
fn.vwrite(&a)
a=temp_kca
fn.vwrite(&a)
a=tadj_kca
fn.vwrite(&a)
a=vmin_kca
fn.vwrite(&a)
a=vmax_kca
fn.vwrite(&a)
a=q10_km
fn.vwrite(&a)
a=temp_km
fn.vwrite(&a)
a=tadj_km
fn.vwrite(&a)
a=vmin_km
fn.vwrite(&a)
a=vmax_km
fn.vwrite(&a)
a=q10_kv
fn.vwrite(&a)
a=temp_kv
fn.vwrite(&a)
a=tadj_kv
fn.vwrite(&a)
a=vmin_kv
fn.vwrite(&a)
a=vmax_kv
fn.vwrite(&a)
a=q10_na
fn.vwrite(&a)
a=temp_na
fn.vwrite(&a)
a=tadj_na
fn.vwrite(&a)
a=vmin_na
fn.vwrite(&a)
a=vmax_na
fn.vwrite(&a)
a=vshift_na
fn.vwrite(&a)
access dends[0]
a=gbar_ca
fn.vwrite(&a)
a=cao_ca
fn.vwrite(&a)
a=gbar_kca
fn.vwrite(&a)
a=caix_kca
fn.vwrite(&a)
a=Ra_kca
fn.vwrite(&a)
a=Rb_kca
fn.vwrite(&a)
a=gbar_km
fn.vwrite(&a)
a=tha_km
fn.vwrite(&a)
a=qa_km
fn.vwrite(&a)
a=Ra_km
fn.vwrite(&a)
a=Rb_km
fn.vwrite(&a)
a=gbar_kv
fn.vwrite(&a)
a=tha_kv
fn.vwrite(&a)
a=qa_kv
fn.vwrite(&a)
a=Ra_kv
fn.vwrite(&a)
a=Rb_kv
fn.vwrite(&a)
a=gbar_na
fn.vwrite(&a)
a=tha_na
fn.vwrite(&a)
a=qa_na
fn.vwrite(&a)
a=Ra_na
fn.vwrite(&a)
a=Rb_na
fn.vwrite(&a)
a=thi1_na
fn.vwrite(&a)
a=thi2_na
fn.vwrite(&a)
a=qi_na
fn.vwrite(&a)
a=thinf_na
fn.vwrite(&a)
a=qinf_na
fn.vwrite(&a)
a=Rg_na
fn.vwrite(&a)
a=Rd_na
fn.vwrite(&a)
access dends[1]
a=gbar_ca
fn.vwrite(&a)
a=cao_ca
fn.vwrite(&a)
a=gbar_kca
fn.vwrite(&a)
a=caix_kca
fn.vwrite(&a)
a=Ra_kca
fn.vwrite(&a)
a=Rb_kca
fn.vwrite(&a)
a=gbar_km
fn.vwrite(&a)
a=tha_km
fn.vwrite(&a)
a=qa_km
fn.vwrite(&a)
a=Ra_km
fn.vwrite(&a)
a=Rb_km
fn.vwrite(&a)
a=gbar_kv
fn.vwrite(&a)
a=tha_kv
fn.vwrite(&a)
a=qa_kv
fn.vwrite(&a)
a=Ra_kv
fn.vwrite(&a)
a=Rb_kv
fn.vwrite(&a)
a=gbar_na
fn.vwrite(&a)
a=tha_na
fn.vwrite(&a)
a=qa_na
fn.vwrite(&a)
a=Ra_na
fn.vwrite(&a)
a=Rb_na
fn.vwrite(&a)
a=thi1_na
fn.vwrite(&a)
a=thi2_na
fn.vwrite(&a)
a=qi_na
fn.vwrite(&a)
a=thinf_na
fn.vwrite(&a)
a=qinf_na
fn.vwrite(&a)
a=Rg_na
fn.vwrite(&a)
a=Rd_na
fn.vwrite(&a)
access dends[2]
a=gbar_ca
fn.vwrite(&a)
a=cao_ca
fn.vwrite(&a)
a=gbar_kca
fn.vwrite(&a)
a=caix_kca
fn.vwrite(&a)
a=Ra_kca
fn.vwrite(&a)
a=Rb_kca
fn.vwrite(&a)
a=gbar_km
fn.vwrite(&a)
a=tha_km
fn.vwrite(&a)
a=qa_km
fn.vwrite(&a)
a=Ra_km
fn.vwrite(&a)
a=Rb_km
fn.vwrite(&a)
a=gbar_kv
fn.vwrite(&a)
a=tha_kv
fn.vwrite(&a)
a=qa_kv
fn.vwrite(&a)
a=Ra_kv
fn.vwrite(&a)
a=Rb_kv
fn.vwrite(&a)
a=gbar_na
fn.vwrite(&a)
a=tha_na
fn.vwrite(&a)
a=qa_na
fn.vwrite(&a)
a=Ra_na
fn.vwrite(&a)
a=Rb_na
fn.vwrite(&a)
a=thi1_na
fn.vwrite(&a)
a=thi2_na
fn.vwrite(&a)
a=qi_na
fn.vwrite(&a)
a=thinf_na
fn.vwrite(&a)
a=qinf_na
fn.vwrite(&a)
a=Rg_na
fn.vwrite(&a)
a=Rd_na
fn.vwrite(&a)
fn.close()
// End params output

load_file("nrngui.hoc")
objref g1
access dends[0]
g1 =new Graph()
g1.beginline()
finitialize(-65)
while (t<tfinal){
	g1.line(t,v)
	fadvance()
	}




