usetable_na=0
usetable_km=0
usetable_kv=0
usetable_ca=0
usetable_kca=0
usetable_cad=0
secondorder=0
strdef fitFile,timesFile,paramsFile,stimFile,outFile,modelFile,outFPre
modelFile = "./myMainen.hoc"
timesFile = "./times.dat"

paramsFile = "./opt_params.dat"
stimFile = "./Stims/stepsmall.dat"
outFile = "./volts/orig_step.dat"
ntimestep =3176
nparams =12

psize =1
ntraces =2
create Exts[1]
objref st,stims,fin,fout,pmat,matOut,stimtime,somaref,secref,extVec,strFunc,most
load_file(modelFile)
objref recSites
recSites = new SectionList()
outFPre = "./volts/orig_step"
soma recSites.append()
//node[1] recSites.append()
//dend[1] recSites.append()
strFunc = new StringFunctions()
access soma
	st = new IClamp(0.5)
st.del=10
	st.dur=30
	st.amp = 0.5
fin = new File()
fout = new File()
tfinal=1000
proc runMatrix(){
	//access dend[1]
	sprint(outFile,"%s_%s.dat",outFPre,secname())
	st = new IClamp(0.5)
	st.del=0 
	st.dur=1e9
	printf ("$o1.nrow,$o2.nrow,$o2.ncol,%d,%d,%d",$o1.nrow,$o2.nrow,$o2.ncol)
	matOut = new Matrix($o1.nrow,($o2.nrow*$o2.ncol))
	for(sim=0;sim<$o1.nrow;sim+=1){
	printf("running sim %d\n",sim)
		counter=0
		transvec = $o1.getrow(sim)
		tfunc()
		for(i=0;i<stims.nrow;i+=1){
			finitialize(v_init)
			for(tt =0;tt<stimtime.ncol;tt+=1){
			dt  =stimtime.x(0,tt)

				st.amp = 1*stims.x(i,tt)

				matOut.x(sim,counter)=v(0.5)
				counter+=1
				fadvance()
				
			}
		}
	}
	printf("finshed run matrix %s\n",outFile)
}
proc readMatrix(){localobj temp
	temp = new Vector()
	fin.ropen($s1)
	for (i=0;i<$o2.nrow;i+=1){
		temp.vread(fin)
		$o2.setrow(i,temp)
		//print i
	}
	fin.close()
}
proc writeMatrix(){localobj temp
	fout.wopen($s1)
	temp = new Vector()
	for (i=0;i<$o2.nrow;i+=1){
		temp = $o2.getrow(i)
		temp.vwrite(fout,3)
	}
	fout.close()
}
proc mul32(){localobj thisone
	countSegs()
	segsMat = segs+comps+1 
	printf("1we have a matrix in the size of %d \n",segsMat )
	segsToAdd = 32-segsMat%32
	forall {
		thisone = new SectionRef()   
		if (thisone.nchild == 0 ) {
			break
			}
	}
	access thisone.sec
	nseg = nseg+segsToAdd
	fcurrent()
	countSegs()
	printf("we have a matrix in the size of %d \n",segs+comps+1 )
	
}

proc printChildren(){localobj sl
	sl = new SectionList()
	sl.children()
	u=0
	forsec sl{
	print secname()
	u+=1
	}
	print u
}	
proc printparent(){localobj sref
	sref = new SectionRef()
	sref.parent
	print secname()
}		


proc countSegs(){
segs=0
comps=0
	forall{
		segs+=nseg
		comps+=1
	}
}
create Exts[1]
proc hinesDisperseBranching(){local i localobj sl,secRef, clist, avec, bvec
	counter = 0
	forsec most{
		secRef = new SectionRef()
		if(secRef.nchild>2){
clist = new List()
  for i=0, secRef.nchild-1 {
    secRef.child[i] clist.append(new SectionRef())
  }
			Exts[counter]{
				L = 1e-9
				diam = 1
				Ra = 1e-9
				cm = 1e-9
				nseg = secRef.nchild-1
			}
			i=0
			Exts[counter]{
				for(x){ 
					if (x > 0) {
						avec =new Vector()
						bvec =new Vector()
						printf("x is %f i is %d\n",x,i)
						clist.o(i).sec{
							avec =new Vector()
							bvec =new Vector()
							for(y){
								avec.append(GetA(y))
								bvec.append(GetB(y))
							}
						}
						connect clist.o(i).sec(0), x
						 k=0
					  clist.o(i).sec{
							for(y){
								SetA(y,avec.x(k))
								SetB(y,bvec.x(k))
							}
						}
						i +=1
					
					}
					
					
				}
				
			}
			fcurrent()
			secRef {
				connect Exts[counter](0), 1
			}
			Exts[counter]{
				for(x){ 
			printf("x is %f and sec is %s\n",x,secname())
					SetA(x,0)
					SetB(x,0)
					}
				}
			
	counter+=1		
		}
	}
}
proc countExts(){
ext_num=0
forsec most {
	somaref= new SectionRef()
	if (somaref.nchild>2){
		ext_num+=1
	}
	}
}



proc PrintRecSites(){localobj sref
	recSites.printnames()
}	
stimtime = new Matrix(1,ntimestep)
readMatrix(timesFile,stimtime)
pmat = new Matrix(psize,nparams)
readMatrix(paramsFile,pmat)
stims = new Matrix(ntraces,ntimestep)
readMatrix(stimFile,stims)
forsec "dend" nseg=1
forsec "apic" nseg=1
	
topology()
countExts()
fcurrent()
fmatrix()
printf("Creating Exts %d\n",ext_num)
if(ext_num>0){
	create Exts[ext_num]
	}	else{
	access Exts[0]
		delete_section()
	}
//****************************************************
forall{nseg=1}
//******************************************************
hinesDisperseBranching()

mul32()
access soma
transvec = pmat.getrow(0)
tfunc()
finitialize(v_init)



//runMatrix(pmat,stims)
//writeMatrix(outFile,matOut)
finitialize(v_init)
//ADD STUFF HERE
// Start topology output
hoc_stdout("C:/Users/rben.KECK-CENTER/Documents/GitHub/NeuroGPU/Neuron/printCell/Amit/output/64T.csv")
topology()
forall{
	printf("%s\n",secname())
	printf("%f,%f,%f,%f,%f,%f,%f,%f,%f,%f,%f,%.16f,%f,%f\n",nseg,L,diam,Ra,cm,dt,st.del,st.dur,st.amp,tfinal,v(0.5),area(0.5),parent_connection(),n3d())
}
hoc_stdout()
// End topology output
// Start topologyList output
hoc_stdout("C:/Users/rben.KECK-CENTER/Documents/GitHub/NeuroGPU/Neuron/printCell/Amit/output/64TL.csv")
MyTopology()
hoc_stdout()
// End topologyList output
// Start mechanisms output
objref mt,ms,fn,pp
strdef s,ss,mname
mt = new MechanismType(0)
fn = new File()
fn.wopen("C:/Users/rben.KECK-CENTER/Documents/GitHub/NeuroGPU/Neuron/printCell/Amit/output/64MDL.csv")
forall{
	fn.printf("#%s\n",secname())
	if (ismembrane("pas")){
		fn.printf("g_pas = %f\n",g_pas)
		fn.printf("e_pas = %f\n",e_pas)
	}
	for i=0, mt.count()-1 {
		mt.select(i)
		mt.selected(mname)
		if (ismembrane(mname)){
			ms = new MechanismStandard(mname,-1)
			for j=0, ms.count()-1 {
				k = ms.name(s, j)
				sprint(ss,"temp=%s",s)
				execute(ss)
				fn.printf("%s = %f\n",s,temp)
			}
			ms = new MechanismStandard(mname,3)
			for j=0, ms.count()-1 {
				k = ms.name(s, j)
				sprint(ss,"temp=%s",s)
				execute(ss)
				fn.printf("%s = %f\n",s,temp)
			}
		}
	}
}
fn.close()
// End mechanisms output
// Start point processess mechanisms output
fn = new File()
fn.wopen("C:/Users/rben.KECK-CENTER/Documents/GitHub/NeuroGPU/Neuron/printCell/Amit/output/64PP.csv")
forall{
	fn.printf("#%s\n",secname())
	mt = new MechanismType(1)
	mt.select("IClamp")
	for (pp = mt.pp_begin(); object_id(pp) != 0; pp = mt.pp_next()) {
		x = pp.get_loc()
		del1 = pp.del
		dur1 = pp.dur
		amp1 = pp.amp
		fn.printf("IClamp,%g, %g, %g, %g, ", x, del1, dur1, amp1)
		pop_section()
	}
	fn.printf("\n")
}
fn.close()
// End point processess mechanisms output
// Start params output
proc writeReversals(){
access soma
a=eca
fn.vwrite(&a)
access soma
a=ek
fn.vwrite(&a)
access soma
a=ena
fn.vwrite(&a)
}
proc writeGGlobals(){
a=celsius
fn.vwrite(&a)
a=stoprun
fn.vwrite(&a)
a=clamp_resist
fn.vwrite(&a)
a=secondorder
fn.vwrite(&a)
}
proc writeNGlobals(){
a=q10_ca
fn.vwrite(&a)
a=temp_ca
fn.vwrite(&a)
a=tadj_ca
fn.vwrite(&a)
a=vmin_ca
fn.vwrite(&a)
a=vmax_ca
fn.vwrite(&a)
a=vshift_ca
fn.vwrite(&a)
a=depth_cad
fn.vwrite(&a)
a=cainf_cad
fn.vwrite(&a)
a=taur_cad
fn.vwrite(&a)
a=q10_kca
fn.vwrite(&a)
a=temp_kca
fn.vwrite(&a)
a=tadj_kca
fn.vwrite(&a)
a=vmin_kca
fn.vwrite(&a)
a=vmax_kca
fn.vwrite(&a)
a=q10_km
fn.vwrite(&a)
a=temp_km
fn.vwrite(&a)
a=tadj_km
fn.vwrite(&a)
a=vmin_km
fn.vwrite(&a)
a=vmax_km
fn.vwrite(&a)
a=q10_kv
fn.vwrite(&a)
a=temp_kv
fn.vwrite(&a)
a=tadj_kv
fn.vwrite(&a)
a=vmin_kv
fn.vwrite(&a)
a=vmax_kv
fn.vwrite(&a)
a=q10_na
fn.vwrite(&a)
a=temp_na
fn.vwrite(&a)
a=tadj_na
fn.vwrite(&a)
a=vmin_na
fn.vwrite(&a)
a=vmax_na
fn.vwrite(&a)
a=vshift_na
fn.vwrite(&a)
}
proc proc0(){
access soma
a=gbar_ca
fn.vwrite(&a)
a=cao_ca
fn.vwrite(&a)
a=gbar_kca
fn.vwrite(&a)
a=caix_kca
fn.vwrite(&a)
a=Ra_kca
fn.vwrite(&a)
a=Rb_kca
fn.vwrite(&a)
a=gbar_km
fn.vwrite(&a)
a=tha_km
fn.vwrite(&a)
a=qa_km
fn.vwrite(&a)
a=Ra_km
fn.vwrite(&a)
a=Rb_km
fn.vwrite(&a)
a=gbar_kv
fn.vwrite(&a)
a=tha_kv
fn.vwrite(&a)
a=qa_kv
fn.vwrite(&a)
a=Ra_kv
fn.vwrite(&a)
a=Rb_kv
fn.vwrite(&a)
a=gbar_na
fn.vwrite(&a)
a=tha_na
fn.vwrite(&a)
a=qa_na
fn.vwrite(&a)
a=Ra_na
fn.vwrite(&a)
a=Rb_na
fn.vwrite(&a)
a=thi1_na
fn.vwrite(&a)
a=thi2_na
fn.vwrite(&a)
a=qi_na
fn.vwrite(&a)
a=thinf_na
fn.vwrite(&a)
a=qinf_na
fn.vwrite(&a)
a=Rg_na
fn.vwrite(&a)
a=Rd_na
fn.vwrite(&a)
}
proc proc1(){
access dend[0]
a=gbar_ca
fn.vwrite(&a)
a=cao_ca
fn.vwrite(&a)
a=gbar_kca
fn.vwrite(&a)
a=caix_kca
fn.vwrite(&a)
a=Ra_kca
fn.vwrite(&a)
a=Rb_kca
fn.vwrite(&a)
a=gbar_km
fn.vwrite(&a)
a=tha_km
fn.vwrite(&a)
a=qa_km
fn.vwrite(&a)
a=Ra_km
fn.vwrite(&a)
a=Rb_km
fn.vwrite(&a)
a=gbar_na
fn.vwrite(&a)
a=tha_na
fn.vwrite(&a)
a=qa_na
fn.vwrite(&a)
a=Ra_na
fn.vwrite(&a)
a=Rb_na
fn.vwrite(&a)
a=thi1_na
fn.vwrite(&a)
a=thi2_na
fn.vwrite(&a)
a=qi_na
fn.vwrite(&a)
a=thinf_na
fn.vwrite(&a)
a=qinf_na
fn.vwrite(&a)
a=Rg_na
fn.vwrite(&a)
a=Rd_na
fn.vwrite(&a)
access dend[1]
a=gbar_ca
fn.vwrite(&a)
a=cao_ca
fn.vwrite(&a)
a=gbar_kca
fn.vwrite(&a)
a=caix_kca
fn.vwrite(&a)
a=Ra_kca
fn.vwrite(&a)
a=Rb_kca
fn.vwrite(&a)
a=gbar_km
fn.vwrite(&a)
a=tha_km
fn.vwrite(&a)
a=qa_km
fn.vwrite(&a)
a=Ra_km
fn.vwrite(&a)
a=Rb_km
fn.vwrite(&a)
a=gbar_na
fn.vwrite(&a)
a=tha_na
fn.vwrite(&a)
a=qa_na
fn.vwrite(&a)
a=Ra_na
fn.vwrite(&a)
a=Rb_na
fn.vwrite(&a)
a=thi1_na
fn.vwrite(&a)
a=thi2_na
fn.vwrite(&a)
a=qi_na
fn.vwrite(&a)
a=thinf_na
fn.vwrite(&a)
a=qinf_na
fn.vwrite(&a)
a=Rg_na
fn.vwrite(&a)
a=Rd_na
fn.vwrite(&a)
}
proc proc2(){
access apic[0]
a=gbar_ca
fn.vwrite(&a)
a=cao_ca
fn.vwrite(&a)
a=gbar_kca
fn.vwrite(&a)
a=caix_kca
fn.vwrite(&a)
a=Ra_kca
fn.vwrite(&a)
a=Rb_kca
fn.vwrite(&a)
a=gbar_km
fn.vwrite(&a)
a=tha_km
fn.vwrite(&a)
a=qa_km
fn.vwrite(&a)
a=Ra_km
fn.vwrite(&a)
a=Rb_km
fn.vwrite(&a)
a=gbar_na
fn.vwrite(&a)
a=tha_na
fn.vwrite(&a)
a=qa_na
fn.vwrite(&a)
a=Ra_na
fn.vwrite(&a)
a=Rb_na
fn.vwrite(&a)
a=thi1_na
fn.vwrite(&a)
a=thi2_na
fn.vwrite(&a)
a=qi_na
fn.vwrite(&a)
a=thinf_na
fn.vwrite(&a)
a=qinf_na
fn.vwrite(&a)
a=Rg_na
fn.vwrite(&a)
a=Rd_na
fn.vwrite(&a)
access apic[1]
a=gbar_ca
fn.vwrite(&a)
a=cao_ca
fn.vwrite(&a)
a=gbar_kca
fn.vwrite(&a)
a=caix_kca
fn.vwrite(&a)
a=Ra_kca
fn.vwrite(&a)
a=Rb_kca
fn.vwrite(&a)
a=gbar_km
fn.vwrite(&a)
a=tha_km
fn.vwrite(&a)
a=qa_km
fn.vwrite(&a)
a=Ra_km
fn.vwrite(&a)
a=Rb_km
fn.vwrite(&a)
a=gbar_na
fn.vwrite(&a)
a=tha_na
fn.vwrite(&a)
a=qa_na
fn.vwrite(&a)
a=Ra_na
fn.vwrite(&a)
a=Rb_na
fn.vwrite(&a)
a=thi1_na
fn.vwrite(&a)
a=thi2_na
fn.vwrite(&a)
a=qi_na
fn.vwrite(&a)
a=thinf_na
fn.vwrite(&a)
a=qinf_na
fn.vwrite(&a)
a=Rg_na
fn.vwrite(&a)
a=Rd_na
fn.vwrite(&a)
}
proc proc3(){
access iseg
a=gbar_kv
fn.vwrite(&a)
a=tha_kv
fn.vwrite(&a)
a=qa_kv
fn.vwrite(&a)
a=Ra_kv
fn.vwrite(&a)
a=Rb_kv
fn.vwrite(&a)
a=gbar_na
fn.vwrite(&a)
a=tha_na
fn.vwrite(&a)
a=qa_na
fn.vwrite(&a)
a=Ra_na
fn.vwrite(&a)
a=Rb_na
fn.vwrite(&a)
a=thi1_na
fn.vwrite(&a)
a=thi2_na
fn.vwrite(&a)
a=qi_na
fn.vwrite(&a)
a=thinf_na
fn.vwrite(&a)
a=qinf_na
fn.vwrite(&a)
a=Rg_na
fn.vwrite(&a)
a=Rd_na
fn.vwrite(&a)
access hill
a=gbar_kv
fn.vwrite(&a)
a=tha_kv
fn.vwrite(&a)
a=qa_kv
fn.vwrite(&a)
a=Ra_kv
fn.vwrite(&a)
a=Rb_kv
fn.vwrite(&a)
a=gbar_na
fn.vwrite(&a)
a=tha_na
fn.vwrite(&a)
a=qa_na
fn.vwrite(&a)
a=Ra_na
fn.vwrite(&a)
a=Rb_na
fn.vwrite(&a)
a=thi1_na
fn.vwrite(&a)
a=thi2_na
fn.vwrite(&a)
a=qi_na
fn.vwrite(&a)
a=thinf_na
fn.vwrite(&a)
a=qinf_na
fn.vwrite(&a)
a=Rg_na
fn.vwrite(&a)
a=Rd_na
fn.vwrite(&a)
}
proc proc4(){
access myelin[0]
a=gbar_na
fn.vwrite(&a)
a=tha_na
fn.vwrite(&a)
a=qa_na
fn.vwrite(&a)
a=Ra_na
fn.vwrite(&a)
a=Rb_na
fn.vwrite(&a)
a=thi1_na
fn.vwrite(&a)
a=thi2_na
fn.vwrite(&a)
a=qi_na
fn.vwrite(&a)
a=thinf_na
fn.vwrite(&a)
a=qinf_na
fn.vwrite(&a)
a=Rg_na
fn.vwrite(&a)
a=Rd_na
fn.vwrite(&a)
access myelin[1]
a=gbar_na
fn.vwrite(&a)
a=tha_na
fn.vwrite(&a)
a=qa_na
fn.vwrite(&a)
a=Ra_na
fn.vwrite(&a)
a=Rb_na
fn.vwrite(&a)
a=thi1_na
fn.vwrite(&a)
a=thi2_na
fn.vwrite(&a)
a=qi_na
fn.vwrite(&a)
a=thinf_na
fn.vwrite(&a)
a=qinf_na
fn.vwrite(&a)
a=Rg_na
fn.vwrite(&a)
a=Rd_na
fn.vwrite(&a)
access myelin[2]
a=gbar_na
fn.vwrite(&a)
a=tha_na
fn.vwrite(&a)
a=qa_na
fn.vwrite(&a)
a=Ra_na
fn.vwrite(&a)
a=Rb_na
fn.vwrite(&a)
a=thi1_na
fn.vwrite(&a)
a=thi2_na
fn.vwrite(&a)
a=qi_na
fn.vwrite(&a)
a=thinf_na
fn.vwrite(&a)
a=qinf_na
fn.vwrite(&a)
a=Rg_na
fn.vwrite(&a)
a=Rd_na
fn.vwrite(&a)
}
proc proc5(){
access myelin[3]
a=gbar_na
fn.vwrite(&a)
a=tha_na
fn.vwrite(&a)
a=qa_na
fn.vwrite(&a)
a=Ra_na
fn.vwrite(&a)
a=Rb_na
fn.vwrite(&a)
a=thi1_na
fn.vwrite(&a)
a=thi2_na
fn.vwrite(&a)
a=qi_na
fn.vwrite(&a)
a=thinf_na
fn.vwrite(&a)
a=qinf_na
fn.vwrite(&a)
a=Rg_na
fn.vwrite(&a)
a=Rd_na
fn.vwrite(&a)
access myelin[4]
a=gbar_na
fn.vwrite(&a)
a=tha_na
fn.vwrite(&a)
a=qa_na
fn.vwrite(&a)
a=Ra_na
fn.vwrite(&a)
a=Rb_na
fn.vwrite(&a)
a=thi1_na
fn.vwrite(&a)
a=thi2_na
fn.vwrite(&a)
a=qi_na
fn.vwrite(&a)
a=thinf_na
fn.vwrite(&a)
a=qinf_na
fn.vwrite(&a)
a=Rg_na
fn.vwrite(&a)
a=Rd_na
fn.vwrite(&a)
access node[0]
a=gbar_na
fn.vwrite(&a)
a=tha_na
fn.vwrite(&a)
a=qa_na
fn.vwrite(&a)
a=Ra_na
fn.vwrite(&a)
a=Rb_na
fn.vwrite(&a)
a=thi1_na
fn.vwrite(&a)
a=thi2_na
fn.vwrite(&a)
a=qi_na
fn.vwrite(&a)
a=thinf_na
fn.vwrite(&a)
a=qinf_na
fn.vwrite(&a)
a=Rg_na
fn.vwrite(&a)
a=Rd_na
fn.vwrite(&a)
}
proc proc6(){
access node[1]
a=gbar_na
fn.vwrite(&a)
a=tha_na
fn.vwrite(&a)
a=qa_na
fn.vwrite(&a)
a=Ra_na
fn.vwrite(&a)
a=Rb_na
fn.vwrite(&a)
a=thi1_na
fn.vwrite(&a)
a=thi2_na
fn.vwrite(&a)
a=qi_na
fn.vwrite(&a)
a=thinf_na
fn.vwrite(&a)
a=qinf_na
fn.vwrite(&a)
a=Rg_na
fn.vwrite(&a)
a=Rd_na
fn.vwrite(&a)
access node[2]
a=gbar_na
fn.vwrite(&a)
a=tha_na
fn.vwrite(&a)
a=qa_na
fn.vwrite(&a)
a=Ra_na
fn.vwrite(&a)
a=Rb_na
fn.vwrite(&a)
a=thi1_na
fn.vwrite(&a)
a=thi2_na
fn.vwrite(&a)
a=qi_na
fn.vwrite(&a)
a=thinf_na
fn.vwrite(&a)
a=qinf_na
fn.vwrite(&a)
a=Rg_na
fn.vwrite(&a)
a=Rd_na
fn.vwrite(&a)
access node[3]
a=gbar_na
fn.vwrite(&a)
a=tha_na
fn.vwrite(&a)
a=qa_na
fn.vwrite(&a)
a=Ra_na
fn.vwrite(&a)
a=Rb_na
fn.vwrite(&a)
a=thi1_na
fn.vwrite(&a)
a=thi2_na
fn.vwrite(&a)
a=qi_na
fn.vwrite(&a)
a=thinf_na
fn.vwrite(&a)
a=qinf_na
fn.vwrite(&a)
a=Rg_na
fn.vwrite(&a)
a=Rd_na
fn.vwrite(&a)
}
proc proc7(){
access node[4]
a=gbar_na
fn.vwrite(&a)
a=tha_na
fn.vwrite(&a)
a=qa_na
fn.vwrite(&a)
a=Ra_na
fn.vwrite(&a)
a=Rb_na
fn.vwrite(&a)
a=thi1_na
fn.vwrite(&a)
a=thi2_na
fn.vwrite(&a)
a=qi_na
fn.vwrite(&a)
a=thinf_na
fn.vwrite(&a)
a=qinf_na
fn.vwrite(&a)
a=Rg_na
fn.vwrite(&a)
a=Rd_na
fn.vwrite(&a)
access Exts[0]
a=gbar_na
fn.vwrite(&a)
a=tha_na
fn.vwrite(&a)
a=qa_na
fn.vwrite(&a)
a=Ra_na
fn.vwrite(&a)
a=Rb_na
fn.vwrite(&a)
a=thi1_na
fn.vwrite(&a)
a=thi2_na
fn.vwrite(&a)
a=qi_na
fn.vwrite(&a)
a=thinf_na
fn.vwrite(&a)
a=qinf_na
fn.vwrite(&a)
a=Rg_na
fn.vwrite(&a)
a=Rd_na
fn.vwrite(&a)
}
proc printParams(){
fn.wopen("C:/Users/rben.KECK-CENTER/Documents/GitHub/NeuroGPU/Neuron/printCell/Amit/output/ParamM.dat")
writeReversals()
writeGGlobals()
writeNGlobals()
for (ii=0;ii<pmat.nrow();ii+=1){
transvec = pmat.getrow(ii)
tfunc()
finitialize()
proc0()
proc1()
proc2()
proc3()
proc4()
proc5()
proc6()
proc7()
}
fn.close()
}
printParams()
// End params output
// Start Mat Output
fcurrent()
hoc_stdout("C:/Users/rben.KECK-CENTER/Documents/GitHub/NeuroGPU/Neuron/printCell/Amit/output/Mat.dat")
MyPrintMatrix()
hoc_stdout()
// endMat Output
hoc_stdout("C:/Users/rben.KECK-CENTER/Documents/GitHub/NeuroGPU/Neuron/printCell/Amit/output/Fmatrix.csv")
MyPrintMatrix()
hoc_stdout()
// End Fmatrix
// Start Recording Sites
hoc_stdout("C:/Users/rben.KECK-CENTER/Documents/GitHub/NeuroGPU/Neuron/printCell/Amit/output/RecList.csv")
PrintRecSites()
hoc_stdout()


quit()


